PsychoPy2experiment version="1.81.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = white
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'list': u'', u'session': u'', u'participant': u''}
  expName = memory_consolidation_morning
  Units = use prefs
  Screen = 1
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Routines
  Routine morning_instructions
    CodeComponent code
      Begin Experiment:
        l = expInfo['list']
        p = expInfo['participant']

        morn_recall = 'morning_recall_list'+l+'sub'+p+'.csv'
    TextComponent instruc
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Good morning!

        Remember the memory task you completed last night? You studied word pairs and later I gave you one word and asked you to recall the other word in the pair.
        This morning you are going to complete the same task with the word pairs you studied last night.

        Please verbally recall the other word in the pair. It is important that you say the word before you hear the beep.

        You will NOT see the correct answer after the beep.

        Questions?
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ready
    TextComponent ready_screen
      color = black
      text = Ready? Please press the space bar to start the task
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine morning_test
    TextComponent text_word
      color = black
      text [set every repeat] = $word1
      stopVal [duration (s)] = 4
      pos = [0, .1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    SoundComponent sound_1
      sound = B
      stopVal [duration (s)] = .2
      startVal [time (s)] = 3.5
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    MicrophoneComponent morning_test_mic
      stereo = False
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
    TextComponent text
      color = black
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 4
      letterHeight = 0.15
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  Routine complete
    TextComponent text_2
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Task complete!

        Thank you.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine morning_instructions
  Routine ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $morn_recall
    loopType = sequential
    nReps = 1
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    Routine morning_test
  LoopTerminator trials
  Routine complete
