PsychoPy2experiment version="1.81.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = white
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'list': u'', u'session': u'', u'participant': u''}
  expName = memory_consolidation_night
  Units = use prefs
  Screen = 1
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Routines
  Routine recencyTest
    TextComponent rec_test
      color = black
      text [set every repeat] = $word1
      stopVal [duration (s)] = 8
      pos = [0, .1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    SoundComponent sound_5
      sound = B
      stopVal [duration (s)] = .2
      startVal [time (s)] = 3.5
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    TextComponent rec_test2
      color = black
      text [set every repeat] = $word2
      stopVal [duration (s)] = 4
      pos = [0,-.1]
      startVal [time (s)] = 4
      letterHeight = 0.2
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    MicrophoneComponent recency_mic
      stereo = False
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
    TextComponent text_11
      color = black
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 8
      letterHeight = 0.15
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  Routine practice_test
    TextComponent prac_test
      color = black
      text [set every repeat] = $prac1
      stopVal [duration (s)] = 8
      pos = [0, .1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    SoundComponent sound_3
      sound = A
      stopVal [duration (s)] = .2
      startVal [time (s)] = 3.5
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    TextComponent second_prac_test
      color = black
      text [set every repeat] = $prac2
      stopVal [duration (s)] = 4
      pos = [0, -.1]
      startVal [time (s)] = 4
      letterHeight = 0.2
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    MicrophoneComponent practice_mic
      stereo = False
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
    TextComponent text_6
      color = black
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 8
      letterHeight = 0.15
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  Routine complete
    TextComponent text_14
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Task complete!

        Thank you
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test_instructions
    TextComponent test_instruc
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please verbally recall the other word in the pair. It is important that you say the word before you hear the beep.

        Once you hear the beep, the correct word will appear on the screen
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine test_trials
    TextComponent testTrials
      color = black
      text [set every repeat] = $word1
      stopVal [duration (s)] = 8
      pos = [0, .1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    SoundComponent sound_2
      sound = B
      stopVal [duration (s)] = .2
      startVal [time (s)] = 3.5
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    TextComponent second_word
      color = black
      text [set every repeat] = $word2
      stopVal [duration (s)] = 4
      pos = [0, -.1]
      startVal [time (s)] = 4
      letterHeight = 0.2
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    MicrophoneComponent study_recall_mic_1
      stereo = False
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
    TextComponent text_13
      color = black
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 8
      letterHeight = 0.15
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  Routine test_instructions_2
    TextComponent text
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Practice Test: Please verbally recall the other word in the pair. It is important that you say the word before you hear the beep.

        Once you hear the beep, the correct word will appear on the screen
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine final_test_instruc
    TextComponent text_3
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please verbally recall the other word in the pair. It is important that you say the word before you hear the beep.

        This time, you will NOT see the correct answer.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine study_instructions
    CodeComponent code_2
      Begin Experiment:
        l = expInfo['list']
        p = expInfo['participant']

        pr = 'practice_list'+l+'.csv'
        primy = 'primacy_list'+l+'.csv'
        recy = 'recency_list'+l+'.csv'
        study = 'study_list'+l+'sub'+p+'.csv'
        study_recall = 'study_recall_list'+l+'sub'+p+'.csv'
        night_recall = 'night_recall_list'+l+'sub'+p+'.csv'
    TextComponent beg_instruct
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        In this task, you will see two words on the screen. Please try to remember the words together. Later, we will give you one of the words in the pair and asks you to recall the other.

        Let's practice!
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine done_with_practice
    TextComponent finish_practice_phase
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If you got all of the items correct press the space bar.
        Otherwise, press any key to complete practice trial again
    KeyboardComponent practice
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent words
      color = black
      text [set every repeat] = $word1
      stopVal [duration (s)] = 4
      pos = [0, .1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent words_second
      color = black
      text [set every repeat] = $word2
      stopVal [duration (s)] = 4
      pos = [0, -.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_8
      color = black
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 4
      letterHeight = 0.15
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  Routine practice_study
    TextComponent practice_text1
      color = black
      text [set every repeat] = $prac1
      stopVal [duration (s)] = 4
      pos = [0, .1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent practice_text2
      color = black
      text [set every repeat] = $prac2
      stopVal [duration (s)] = 4
      pos = [0, -.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_5
      color = black
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 4
      letterHeight = 0.15
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  Routine primacy_test
    TextComponent primTest_trials
      color = black
      text [set every repeat] = $word1
      stopVal [duration (s)] = 8
      pos = [0,.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    SoundComponent sound_4
      sound = B
      stopVal [duration (s)] = .2
      startVal [time (s)] = 3.5
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    TextComponent primTest_answer
      color = black
      text [set every repeat] = $word2
      stopVal [duration (s)] = 4
      pos = [0, -.1]
      startVal [time (s)] = 4
      letterHeight = 0.2
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    MicrophoneComponent primacy_mic
      stereo = False
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
    TextComponent text_10
      color = black
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 8
      letterHeight = 0.15
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  Routine before_actual_task_instr
    TextComponent text_2
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text:
        Great Job! Questions?

        Now we are ready to start the task. Please try to remember the words together.

        This memory task includes:

        Study: presented about 50 word pairs
        Test 1: recall other word, correct answer will appear after beep
        Test 2: recall other word, will NOT see correct answer
        Test 3: In the morning, repeat the test

        Between tests you will do math problems for 1 minute

        Ready? Press the space bar to begin the task.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ready
    TextComponent text_15
      color = black
      text = Ready? Press the space bar to begin the task.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine recency_trials
    TextComponent rec
      color = black
      text [set every repeat] = $word1
      stopVal [duration (s)] = 4
      pos = [0, .1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent rec2
      color = black
      text [set every repeat] = $word2
      stopVal [duration (s)] = 4
      pos = [0, -.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_9
      color = black
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 4
      letterHeight = 0.15
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  Routine math_problems
    TextComponent math1
      color = black
      text = Please complete as many math problems as you can until you hear the beep
      stopVal [duration (s)] = 60
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    SoundComponent sound_1
      sound = B
      stopVal [duration (s)] = .2
      startVal [time (s)] = 60
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    TextComponent done_math
      color = black
      text = Please stop completing math problems
      startVal [time (s)] = 60
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 60
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  Routine primacy_trials
    TextComponent primacy
      color = black
      text [set every repeat] = $word1
      stopVal [duration (s)] = 4
      pos = [0,.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent primacy2
      color = black
      text [set every repeat] = $word2
      stopVal [duration (s)] = 4
      pos = [0, -.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_7
      color = black
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 4
      letterHeight = 0.15
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  Routine final_night_test
  Routine final_night_test_2
    TextComponent text_4
      color = black
      text [set every repeat] = $word1
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    SoundComponent sound_6
      sound = B
      stopVal [duration (s)] = .2
      startVal [time (s)] = 3.5
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    MicrophoneComponent night_test_mic
      stereo = False
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
    TextComponent text_12
      color = black
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 4
      letterHeight = 0.15
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Flow
  Routine study_instructions
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = $pr
    loopType = sequential
    nReps = 1
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    Routine practice_study
  LoopTerminator trials_5
  Routine test_instructions_2
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = $pr
    loopType = random
    nReps = 1
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    Routine practice_test
  LoopTerminator trials_6
  Routine before_actual_task_instr
  LoopInitiator prim loopType="TrialHandler"
    conditionsFile = $primy
    loopType = sequential
    nReps = 1
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    Routine primacy_trials
  LoopTerminator prim
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $study
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $recy
    loopType = sequential
    nReps = 1
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    Routine recency_trials
  LoopTerminator trials_2
  Routine math_problems
  Routine test_instructions
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = $primy
    loopType = sequential
    nReps = 1
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    Routine primacy_test
  LoopTerminator trials_7
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = $study_recall
    loopType = sequential
    nReps = 1
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    Routine test_trials
  LoopTerminator trials_3
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = $recy
    loopType = sequential
    nReps = 1
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    Routine recencyTest
  LoopTerminator trials_8
  Routine math_problems
  Routine final_test_instruc
  Routine ready
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = $night_recall
    loopType = sequential
    nReps = 1
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    Routine final_night_test_2
  LoopTerminator trials_4
  Routine complete
